PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = painpred
  keyboardBackend = ioHub
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Routines
  Routine continuous_pain_rating
    ImageComponent vertical_1
      image = instruction_images/vertical_white_rectangle.png
      pos = (0, -0.05)
      size = (0.025, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent horiozntal_top_1
      image = instruction_images/hori_white_rectangle.png
      pos = (0, 0.35)
      size = (0.1, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent horizontal_bottom_1
      image = instruction_images/hori_white_rectangle.png
      pos = (0, -0.45)
      size = (0.1, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent pain_continuous_image
      image = instruction_images/pain_pred.PNG
      pos = (0.0, 0.45)
      size = (0.627, 0.09405)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent most_pain_1
      letterHeight = 0.03
      pos = (-0.15, 0.352)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Most Pain
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    TextComponent least_pain_1
      letterHeight = 0.03
      pos = (-0.15, -0.445)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Least Pain
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    SliderComponent continuous_pain_slider
      color = white
      fillColor = 1.0000, 0.6000, -1.0000
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.03
      pos = (0, -0.05)
      size = (0.1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeHistory = True
      styles = rating
      ticks = (1, 2)
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    MouseComponent mouse_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      timeRelativeTo = routine
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  Routine pain_prediction
    ImageComponent vertical_2
      image = instruction_images/vertical_white_rectangle.png
      pos = (0, -0.05)
      size = (0.025, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent horizontal_bottom_2
      image = instruction_images/hori_white_rectangle.png
      pos = (0, -0.45)
      size = (0.1, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent horizontal_top_2
      image = instruction_images/hori_white_rectangle.png
      pos = (0, 0.35)
      size = (0.1, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent pain_predict_image
      image = instruction_images/pain_expect.PNG
      pos = (0, 0.45)
      size = (0.5544, 0.1188)
      startVal [time (s)] = 0.0
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    TextComponent most_pain_2
      letterHeight = 0.03
      pos = (-0.15, 0.352)
      startVal [time (s)] = 0.0
      text = Most Pain
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    TextComponent least_pain_2
      letterHeight = 0.03
      pos = (-0.15, -0.445)
      startVal [time (s)] = 0.0
      text = Least Pain
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    SliderComponent pain_predict_slider
      color = white
      fillColor = 0.3333, 0.3333, 1.0000
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.03
      pos = (0, -0.05)
      size = (0.1, 0.8)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2)
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  Routine pain_confidence
    ImageComponent horizontal_central
      image = instruction_images/hori_white_rectangle.png
      size = (0.6, 0.025)
      startVal [time (s)] = 0.0
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    ImageComponent vertical_right
      image = instruction_images/vertical_white_rectangle.png
      pos = (0.3, 0)
      size = (0.02, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent vertical_left
      image = instruction_images/vertical_white_rectangle.png
      pos = (-0.3, 0)
      size = (0.02, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent confidence_image
      image = instruction_images/confidence.PNG
      pos = (0, 0.35)
      size = (0.5544, 0.1188)
      startVal [time (s)] = 0.0
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    SliderComponent confidence_slider_2
      color = White
      fillColor = -1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      granularity = 0
      labels = 'Unsure', 'Sure'
      letterHeight = 0.03
      size = (0.6, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2)
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  Routine instruction_1
    ImageComponent next_button_1
      image = instruction_images/next_button.png
      pos = (0, -0.45)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_1
      clickable = next_button_1
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent slider_1
      image = instruction_images/first_slider_image.png
      pos = (0, -0.12)
      size = (0.3, 0.55)
      startVal [time (s)] = 0.0
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    TextComponent instruction_1_text_new
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        You will be asked to rate how much pain you feel
        in real time, using a slider like this.

        Please rate pain continuously and ensure to always
        have your finger on the screen
        even if the pain level is not changing.
  Routine instruction_2
    ImageComponent next_button_2
      image = instruction_images/next_button.png
      pos = (0, -0.45)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = next_button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent slider_2
      image = instruction_images/second_slider_image.png
      pos = (0, -0.12)
      size = (0.3, 0.55)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.03
      pos = (0, 0.30)
      startVal [time (s)] = 0.0
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      text:
        Sometimes, you will be asked to predict how much pain
        you will experience in one minute from now,
        on a slider like this. Don’toverthink it,
        we will collect your first response.
  Routine instruction_3
    MouseComponent mouse_3
      clickable = start_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent start_button
      image = instruction_images/start_button.png
      pos = (0, -0.45)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent slider_3
      image = instruction_images/confidence_slider.png
      size = (0.375, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent instruction_3_text_
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Next, you will be asked to rate how confident you are
        in your prediction, on a scale ranging from unsure to sure.
  Routine end_screen
    TextComponent ending
      letterHeight = 0.025
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        The session is over!
        Thank you for completing the task.

        Please click on the button below to
        finish the game.
    ImageComponent finish_button
      image = instruction_images/finish_button.png
      pos = (0, -0.45)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = finish_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine sit
    TextComponent instruction_sit_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Thank you for agreeing to participate in our study,

        please ensure that you are sitting down for the task.
    ImageComponent next_button_sit
      image = instruction_images/next_button.png
      pos = (0, -0.45)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_sit
      clickable = next_button_sit
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine calibration_top
    ImageComponent vertical_calibration_top
      image = instruction_images/vertical_white_rectangle.png
      pos = (0, -0.05)
      size = (0.025, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent horizontal_calibration_top_top
      image = instruction_images/hori_white_rectangle.png
      pos = (0, 0.35)
      size = (0.1, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent horizontal_calibration_top_bottom
      image = instruction_images/hori_white_rectangle.png
      pos = (0, -0.45)
      size = (0.1, 0.02)
      startVal [time (s)] = 0.0
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    SliderComponent continuous_slider_calibrate_top
      color = white
      fillColor = 0.3333, 0.3333, 1.0000
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.03
      pos = (0, -0.05)
      size = (0.1, 0.8)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2)
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    MouseComponent mouse_top
      clickable = horizontal_calibration_top_top
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent calibration_top_instructions
      image = instruction_images/calibration_top.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine calibration_bottom
    ImageComponent vertical_calibration_bottom
      image = instruction_images/vertical_white_rectangle.png
      pos = (0, -0.05)
      size = (0.025, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent horizontal_calibration_bottom_bottom
      image = instruction_images/hori_white_rectangle.png
      pos = (0, -0.45)
      size = (0.1, 0.02)
      startVal [time (s)] = 0.0
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    ImageComponent horizontal_calibration_bottom_top
      image = instruction_images/hori_white_rectangle.png
      pos = (0, 0.35)
      size = (0.1, 0.02)
      startVal [time (s)] = 0.0
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    SliderComponent continuous_slider_calibrate_bottom
      color = white
      fillColor = 1.0000, 0.6000, -1.0000
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.03
      pos = (0, -0.05)
      size = (0.1, 0.8)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2)
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    MouseComponent mouse_bottom
      clickable = horizontal_calibration_bottom_bottom
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent calibration_bottom_instructions
      image = instruction_images/calibration_bottom.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine blank1s
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  Routine sit
  LoopInitiator calibration_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine calibration_top
    Routine blank1s
    Routine calibration_bottom
  LoopTerminator calibration_loop
  Routine instruction_1
  Routine instruction_2
  Routine instruction_3
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine blank1s
    Routine continuous_pain_rating
    Routine blank1s
    Routine pain_prediction
    Routine blank1s
    Routine pain_confidence
  LoopTerminator trials
  Routine end_screen
